PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [2560, 1440]
  expName = ClickOnly
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine prepareExp
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    CodeComponent codePrepareExp
      Code Type = Py
      Before Experiment:
        import random
        import numpy as np
        import itertools

        """ For sampling """
        class SimplePerturbationLoader:
            def __init__(self):
                # create stimulus samples
                self.stim_ranges = [
                    [12, 36],
                    [54, 78],
                    [102, 126],
                    [144, 168],
                ]
                self.n_sample_per_range = 5
                self.stim_samples = [
                    np.linspace(s[0], s[1], self.n_sample_per_range)
                    for s in self.stim_ranges]

                # create perturbation sampling range
                self.perturbations = [
                    (1, 1), # quadrant 1
                    (-1, 1), # quadrant 2
                    (-1, -1), # quadrant 3
                    (1, -1), # quadrant 4
                ]

                # set other configurations
                self.jittering = 2

            def stim_add_noise(self, xs):
                noise = np.random.uniform(low=-1, high=1, size=xs.shape) * self.jittering
                return xs + noise

            def generate_one_batch_stims(self):
                stim_list = np.concatenate(self.stim_samples)
                # add some noise
                sampled_stims = self.stim_add_noise(stim_list)
                # combination
                combinations = list(itertools.product(sampled_stims, self.perturbations))
                random.shuffle(combinations)
                return combinations


        """ For generating perturbations """
        class PerturbationManager:
            def __init__(self):
                self.perturb_scale_range = [0.1, 0.4]
                self.implicit_perturb_settings = {
                    'radius': 0.05,
                    'color': 'white',
                }

            def generate_perturb_position(self, perturb_code):
                perturb_center = np.random.uniform(
                    self.perturb_scale_range[0],
                    self.perturb_scale_range[1],
                    size=2
                ) * np.array(perturb_code) # center of perturbation
                return perturb_center

            def generate_gradient_mask(self, win, perturb_code):
                settings = self.implicit_perturb_settings
                center = self.generate_perturb_position(perturb_code)

                perturb_info = {
                    'pos': center,
                    'radius': settings['radius'],
                }

                mask = visual.Circle(
                    win,
                    fillColor=settings['color'], # fill color
                    lineColor=settings['color'], # border color (same as fill here)
                    edges=128, # smoother circle (default is 128)
                    **perturb_info
                )

                return mask, perturb_info
      Begin Experiment:
        # set configrations

        N_REPEATS = 4
        N_REPEAT_BLOCK = 2
        stim_perturb_loader = SimplePerturbationLoader()
        perturbation_manager = PerturbationManager()

        # logging.console.setLevel(logging.DEBUG)
      Begin Routine:
        # now generate the stimuli and perturbations

        all_repats_stims = []
        BLOCK_SIZE = 0
        for _ in range(N_REPEATS):
            # generate stims and perturbations
            stim_perturb_list = stim_perturb_loader.generate_one_batch_stims()
            # logging.info('DEBUGGING')
            # logging.info(len(stim_perturb_list))
            # cut into blocks
            assert len(stim_perturb_list) % N_REPEAT_BLOCK == 0
            BLOCK_SIZE = len(stim_perturb_list) // N_REPEAT_BLOCK
            for i in range(N_REPEAT_BLOCK):
                all_repats_stims.append(stim_perturb_list[i*BLOCK_SIZE:(i+1)*BLOCK_SIZE])

        N_BLOCKS = N_REPEATS * N_REPEAT_BLOCK

        logging.info(N_BLOCKS)
  Routine Display
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  Routine Delay
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    CodeComponent codeDelay
      Code Type = Py
      Begin Routine:
        stim_degree = cur_block_stim_perturbs[cur_trial_i][0]
        perturb_code = cur_block_stim_perturbs[cur_trial_i][1]

        perturb_mask, perturb_info = perturbation_manager.generate_gradient_mask(win, perturb_code)
        print(f'Perturb: {perturb_info}')
      Each Frame:
        perturb_mask.draw()
    TextboxComponent textbox
      bold = False
      editable = False
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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  Routine OriTest
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  Routine PreTrial
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    CodeComponent codePretrial
      Code Type = Py
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      Begin Routine:
        cur_trial_i = trialLoop.thisN
        cur_trial_stim_perturbs = cur_block_stim_perturbs[cur_trial_i]
  Routine postTrial
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  Routine PreBlock
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    CodeComponent codePreBlock
      Code Type = Py
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      Begin Routine:
        cur_block_stim_perturbs = all_repats_stims[blockLoop.thisN]
Flow
  Routine prepareExp
  LoopInitiator DebugLoop loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = 1
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    LoopInitiator blockLoop loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = N_BLOCKS
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      Routine PreBlock
      LoopInitiator trialLoop loopType="TrialHandler"
        loopType = sequential
        nReps = BLOCK_SIZE
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        Routine PreTrial
        Routine Display
        Routine Delay
        Routine OriTest
        Routine postTrial
      LoopTerminator trialLoop
    LoopTerminator blockLoop
  LoopTerminator DebugLoop
